load_file("subiter.hoc")
load_file("nrngui.hoc")

proc celldef() {
  topol()
  secrefs()
  subsets()
  geom()
  biophys()
  geom_nseg()
  biophys_inhomo()
}

create soma, dendrite[158]

proc topol() { local i
  connect dendrite[0](0), soma(1)
  for i = 1, 3 connect dendrite[i](0), soma(0)
  for i = 4, 5 connect dendrite[i](0), dendrite(1)
  for i = 6, 7 connect dendrite[i](0), dendrite[1](1)
  for i = 8, 9 connect dendrite[i](0), dendrite[2](1)
  for i = 10, 11 connect dendrite[i](0), dendrite[3](1)
  for i = 12, 13 connect dendrite[i](0), dendrite[4](1)
  for i = 14, 15 connect dendrite[i](0), dendrite[5](1)
  for i = 16, 17 connect dendrite[i](0), dendrite[6](1)
  for i = 18, 19 connect dendrite[i](0), dendrite[7](1)
  for i = 20, 21 connect dendrite[i](0), dendrite[8](1)
  for i = 22, 23 connect dendrite[i](0), dendrite[9](1)
  for i = 24, 25 connect dendrite[i](0), dendrite[10](1)
  for i = 26, 27 connect dendrite[i](0), dendrite[11](1)
  for i = 28, 29 connect dendrite[i](0), dendrite[12](1)
  for i = 30, 31 connect dendrite[i](0), dendrite[13](1)
  for i = 32, 33 connect dendrite[i](0), dendrite[14](1)
  for i = 34, 35 connect dendrite[i](0), dendrite[16](1)
  for i = 36, 37 connect dendrite[i](0), dendrite[17](1)
  for i = 38, 39 connect dendrite[i](0), dendrite[18](1)
  for i = 40, 41 connect dendrite[i](0), dendrite[19](1)
  for i = 42, 43 connect dendrite[i](0), dendrite[22](1)
  for i = 44, 45 connect dendrite[i](0), dendrite[23](1)
  for i = 46, 47 connect dendrite[i](0), dendrite[25](1)
  for i = 48, 49 connect dendrite[i](0), dendrite[26](1)
  for i = 50, 51 connect dendrite[i](0), dendrite[27](1)
  for i = 52, 53 connect dendrite[i](0), dendrite[30](1)
  for i = 54, 55 connect dendrite[i](0), dendrite[31](1)
  for i = 56, 57 connect dendrite[i](0), dendrite[34](1)
  for i = 58, 59 connect dendrite[i](0), dendrite[35](1)
  for i = 60, 61 connect dendrite[i](0), dendrite[36](1)
  for i = 62, 63 connect dendrite[i](0), dendrite[37](1)
  for i = 64, 65 connect dendrite[i](0), dendrite[38](1)
  for i = 66, 67 connect dendrite[i](0), dendrite[39](1)
  for i = 68, 69 connect dendrite[i](0), dendrite[46](1)
  for i = 70, 71 connect dendrite[i](0), dendrite[50](1)
  for i = 72, 73 connect dendrite[i](0), dendrite[51](1)
  for i = 74, 75 connect dendrite[i](0), dendrite[55](1)
  for i = 76, 77 connect dendrite[i](0), dendrite[75](1)
  for i = 78, 79 connect dendrite[i](0), dendrite[76](1)
  for i = 80, 81 connect dendrite[i](0), dendrite[77](1)
  for i = 82, 83 connect dendrite[i](0), dendrite[78](1)
  for i = 84, 85 connect dendrite[i](0), dendrite[81](1)
  for i = 86, 87 connect dendrite[i](0), dendrite[85](1)
  for i = 88, 89 connect dendrite[i](0), dendrite[86](1)
  for i = 90, 91 connect dendrite[i](0), dendrite[87](1)
  for i = 92, 93 connect dendrite[i](0), dendrite[88](1)
  for i = 94, 95 connect dendrite[i](0), dendrite[91](1)
  for i = 96, 97 connect dendrite[i](0), dendrite[94](1)
  for i = 98, 99 connect dendrite[i](0), dendrite[95](1)
  for i = 100, 101 connect dendrite[i](0), dendrite[99](1)
  for i = 102, 103 connect dendrite[i](0), dendrite[101](1)
  for i = 104, 105 connect dendrite[i](0), dendrite[102](1)
  for i = 106, 107 connect dendrite[i](0), dendrite[104](1)
  for i = 108, 109 connect dendrite[i](0), dendrite[105](1)
  for i = 110, 111 connect dendrite[i](0), dendrite[108](1)
  for i = 112, 113 connect dendrite[i](0), dendrite[109](1)
  for i = 114, 115 connect dendrite[i](0), dendrite[111](1)
  for i = 116, 117 connect dendrite[i](0), dendrite[113](1)
  for i = 118, 119 connect dendrite[i](0), dendrite[114](1)
  for i = 120, 121 connect dendrite[i](0), dendrite[115](1)
  for i = 122, 123 connect dendrite[i](0), dendrite[116](1)
  for i = 124, 125 connect dendrite[i](0), dendrite[117](1)
  for i = 126, 127 connect dendrite[i](0), dendrite[119](1)
  for i = 128, 129 connect dendrite[i](0), dendrite[125](1)
  for i = 130, 131 connect dendrite[i](0), dendrite[126](1)
  for i = 132, 133 connect dendrite[i](0), dendrite[127](1)
  for i = 134, 135 connect dendrite[i](0), dendrite[129](1)
  for i = 136, 137 connect dendrite[i](0), dendrite[133](1)
  for i = 138, 139 connect dendrite[i](0), dendrite[135](1)
  for i = 140, 141 connect dendrite[i](0), dendrite[136](1)
  for i = 142, 143 connect dendrite[i](0), dendrite[139](1)
  for i = 144, 145 connect dendrite[i](0), dendrite[143](1)
  for i = 146, 147 connect dendrite[i](0), dendrite[145](1)
  for i = 148, 149 connect dendrite[i](0), dendrite[147](1)
  for i = 150, 151 connect dendrite[i](0), dendrite[148](1)
  for i = 152, 153 connect dendrite[i](0), dendrite[149](1)
  for i = 154, 155 connect dendrite[i](0), dendrite[151](1)
  for i = 156, 157 connect dendrite[i](0), dendrite[153](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, 0, 0, 20)	
	pt3dadd(20, 0, 0, 20) 
  }
  dendrite {pt3dclear()
	pt3dadd(20, 0, 0, 20)		
	pt3dadd(20.8, 0.3, -0.5, 2.1)
	pt3dadd(21.5, 0.5, -1, 2.1)
	pt3dadd(22.4, 0.4, -1.6, 2.1)
	pt3dadd(23.8, 0.5, -2.5, 2.1)
	pt3dadd(24.6, 0.5, -3, 2.1)
	pt3dadd(26.1, 0.6, -4, 2.1)
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  }
}
proc shape3d_2() {
  dendrite[9] {	pt3dadd(-45.9, -6.3, -17.4, 0.3)
	pt3dadd(-46.7, -6.3, -17.1, 0.3)
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  }
}
proc shape3d_3() {
  dendrite[19] {	pt3dadd(-25.8, -20.7, -2.1, 0.7)
	pt3dadd(-26.5, -20.7, -1.5, 0.7)
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  }
}
proc shape3d_4() {
  dendrite[21] {	pt3dadd(-140.9, 4.9, 33.4, 0.2)
	pt3dadd(-141.4, 5.5, 33.8, 0.2)
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  }
}
proc shape3d_5() {
  dendrite[26] {	pt3dadd(-39.1, 24.2, -5.2, 0.7)
	pt3dadd(-39.6, 24.6, -5.1, 0.7)
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  }
}
proc shape3d_6() {
  dendrite[32] {	pt3dadd(64.5, 18.7, -73.4, 0.5)
	pt3dadd(65.4, 18, -76.3, 0.5)
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  }
}
proc shape3d_7() {
  dendrite[37] {	pt3dadd(-95.9, -61.3, 6.6, 0.3)
	pt3dadd(-95.9, -62.1, 6.5, 0.3)
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  }
}
proc shape3d_8() {
  dendrite[41] {	pt3dadd(-69.5, -19.7, -22.2, 0.3)
	pt3dadd(-70.5, -19.4, -23.2, 0.3)
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  }
}
proc shape3d_9() {
  dendrite[44] {	pt3dadd(-73, -3.9, -4.5, 0.3)
	pt3dadd(-73.9, -3.6, -4.1, 0.3)
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  }
}
proc shape3d_10() {
  dendrite[47] {	pt3dadd(-131.1, 7.9, -84.6, 0.3)
	pt3dadd(-131.8, 8.1, -85.5, 0.3)
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  }
}
proc shape3d_11() {
  dendrite[49] {	pt3dadd(-109.4, 68.6, -6.7, 0.3)
	pt3dadd(-109.8, 69.2, -6.8, 0.3)
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  }
}
proc shape3d_12() {
  dendrite[52] {	pt3dadd(119.6, -52.6, 51.5, 0.5)
	pt3dadd(120.6, -53.1, 51.5, 0.5)
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  }
}
proc shape3d_13() {
  dendrite[54] {	pt3dadd(84.7, -49.4, 36.8, 0.5)
	pt3dadd(86.4, -50.7, 42.4, 0.5)
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  }
}
proc shape3d_14() {
  dendrite[59] {	pt3dadd(-71.8, -158.2, -80.7, 0.3)
	pt3dadd(-73.2, -159.1, -81.2, 0.3)
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  }
}
proc shape3d_15() {
  dendrite[62] {	pt3dadd(-116.6, -88.7, 10.7, 0.3)
	pt3dadd(-117.2, -89.1, 11, 0.3)
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  }
}
proc shape3d_16() {
  dendrite[65] {	pt3dadd(-32.7, -52.9, 0.4, 0.3)
	pt3dadd(-33.1, -53.6, 0.5, 0.3)
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  }
}
proc shape3d_17() {
  dendrite[66] {	pt3dadd(-70.7, -90.5, -33.1, 0.3)
	pt3dadd(-70.7, -91.3, -33.4, 0.3)
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  }
}
proc shape3d_18() {
  dendrite[69] {	pt3dadd(-112.3, 4.9, 7.6, 0.3)
	pt3dadd(-113.1, 5.5, 8.6, 0.3)
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  }
}
proc shape3d_19() {
  dendrite[71] {	pt3dadd(-129.4, 64.7, 57.8, 0.3)
	pt3dadd(-130.4, 65.7, 59.2, 0.3)
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  }
}
proc shape3d_20() {
  dendrite[74] {	pt3dadd(105.7, -29.8, -23.9, 0.5)
	pt3dadd(106.8, -30.3, -25.3, 0.5)
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  }
}
proc shape3d_21() {
  dendrite[80] {	pt3dadd(122.5, -15.9, 6.3, 0.5)
	pt3dadd(122.4, -16.6, 6.4, 0.5)
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  }
}
proc shape3d_22() {
  dendrite[82] {	pt3dadd(67.1, -115.6, -14.4, 0.5)
	pt3dadd(65.3, -117.8, -15, 0.5)
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  }
}
proc shape3d_23() {
  dendrite[84] {	pt3dadd(264.7, 2.5, -56.2, 0.5)
	pt3dadd(266, 2.9, -57.5, 0.5)
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  }
}
proc shape3d_24() {
  dendrite[90] {	pt3dadd(159.5, 73.5, -88.2, 0.5)
	pt3dadd(159.3, 74.3, -88.8, 0.5)
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  }
}
proc shape3d_25() {
  dendrite[96] {	pt3dadd(225.6, -7.7, -13.1, 0.5)
	pt3dadd(226.5, -7.6, -14, 0.5)
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  }
}
proc shape3d_26() {
  dendrite[100] {	pt3dadd(239.6, -23.8, -1.4, 0.5)
	pt3dadd(240.4, -24.5, -2, 0.5)
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  }
}
proc shape3d_27() {
  dendrite[107] {	pt3dadd(234.3, 24.9, 105, 0.5)
	pt3dadd(234.9, 24.9, 105.7, 0.5)
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  }
}
proc shape3d_28() {
  dendrite[111] {	pt3dadd(308.5, -60.2, 57.7, 0.5)
	pt3dadd(309.6, -60.8, 57.8, 0.5)
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  }
}
proc shape3d_29() {
  dendrite[117] {	pt3dadd(264, -21.5, 58.3, 1.2)
	pt3dadd(266.4, -20.8, 58.6, 1.2)
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  }
}
proc shape3d_30() {
  dendrite[122] {	pt3dadd(324.5, 4, 95.5, 0.5)
	pt3dadd(325.7, 4.8, 97.1, 0.5)
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  }
}
proc shape3d_31() {
  dendrite[128] {	pt3dadd(301.6, -21.5, 84.4, 0.2)
	pt3dadd(303.6, -22, 90, 0.2)
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  }
}
proc shape3d_32() {
  dendrite[133] {	pt3dadd(385.2, -75.2, 178.5, 0.6)
	pt3dadd(387.7, -73.4, 182.8, 0.6)
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  }
}
proc shape3d_33() {
  dendrite[140] {	pt3dadd(439.4, -56.7, 117.3, 0.2)
	pt3dadd(439.3, -57.6, 116.2, 0.2)
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  }
}
proc shape3d_34() {
  dendrite[144] {	pt3dadd(369, -19.8, 52.5, 1.1)
	pt3dadd(369.4, -19.2, 52.3, 1.1)
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  }
}
proc shape3d_35() {
  dendrite[146] {	pt3dadd(378.7, 31.1, 126.8, 1.1)
	pt3dadd(378.8, 32.1, 127.4, 1.1)
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  }
}
proc shape3d_36() {
  dendrite[150] {	pt3dadd(433.6, -115.7, 126.1, 0.2)
	pt3dadd(433.8, -116.7, 123.7, 0.2)
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  }
}
proc shape3d_37() {
  dendrite[155] {	pt3dadd(404.3, 46.4, 42.2, 0.6)
	pt3dadd(404.6, 47.7, 42.1, 0.6)
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  }
}
proc shape3d_38() {
  dendrite[157] {	pt3dadd(438.5, -45.2, 106.4, 0.2)
	pt3dadd(439.7, -45.6, 108, 0.2)
  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
}

objref oad[43],mad[24],tuft[33]
// objref lamd[3],mamd[9],uamd[5]
objref basal[57],mysoma

// This part categorizes the cell-sections into main apical dendrite (mad),
// oblique apical dendrite (oad), basal dendrite, soma, and
// tuft.  This is needed since synaptic densities vary by cell-region.

proc secrefs() {
soma mysoma = new SectionRef()
dendrite mad[0] = new SectionRef()
dendrite[1] basal[0] = new SectionRef()
dendrite[2] basal[1] = new SectionRef()
dendrite[3] basal[2] = new SectionRef()
dendrite[4] mad[1] = new SectionRef()
dendrite[5] oad[0] = new SectionRef()
dendrite[6] basal[3] = new SectionRef()
dendrite[7] basal[4] = new SectionRef()
dendrite[8] basal[5] = new SectionRef()
dendrite[9] basal[6] = new SectionRef()
dendrite[10] basal[7] = new SectionRef()
dendrite[11] basal[8] = new SectionRef()
dendrite[12] oad[1] = new SectionRef()
dendrite[13] mad[2] = new SectionRef()
dendrite[14] oad[2] = new SectionRef()
dendrite[15] oad[3] = new SectionRef()
dendrite[16] basal[9] = new SectionRef()
dendrite[17] basal[10] = new SectionRef()
dendrite[18] basal[11] = new SectionRef()
dendrite[19] basal[12] = new SectionRef()
dendrite[20] basal[13] = new SectionRef()
dendrite[21] basal[14] = new SectionRef()
dendrite[22] basal[15] = new SectionRef()
dendrite[23] basal[16] = new SectionRef()
dendrite[24] basal[17] = new SectionRef()
dendrite[25] basal[18] = new SectionRef()
dendrite[26] basal[19] = new SectionRef()
dendrite[27] basal[20] = new SectionRef()
dendrite[28] oad[4] = new SectionRef()
dendrite[29] oad[5] = new SectionRef()
dendrite[30] oad[6] = new SectionRef()
dendrite[31] mad[3] = new SectionRef()
dendrite[32] oad[7] = new SectionRef()
dendrite[33] oad[8] = new SectionRef()
dendrite[34] basal[21] = new SectionRef()
dendrite[35] basal[22] = new SectionRef()
dendrite[36] basal[23] = new SectionRef()
dendrite[37] basal[24] = new SectionRef()
dendrite[38] basal[25] = new SectionRef()
dendrite[39] basal[26] = new SectionRef()
dendrite[40] basal[27] = new SectionRef()
dendrite[41] basal[28] = new SectionRef()
dendrite[42] basal[29] = new SectionRef()
dendrite[43] basal[30] = new SectionRef()
dendrite[44] basal[31] = new SectionRef()
dendrite[45] basal[32] = new SectionRef()
dendrite[46] basal[33] = new SectionRef()
dendrite[47] basal[34] = new SectionRef()
dendrite[48] basal[35] = new SectionRef()
dendrite[49] basal[36] = new SectionRef()
dendrite[50] basal[37] = new SectionRef()
dendrite[51] basal[38] = new SectionRef()
dendrite[52] oad[9] = new SectionRef()
dendrite[53] oad[10] = new SectionRef()
dendrite[54] oad[11] = new SectionRef()
dendrite[55] mad[4] = new SectionRef()
dendrite[56] basal[39] = new SectionRef()
dendrite[57] basal[40] = new SectionRef()
dendrite[58] basal[41] = new SectionRef()
dendrite[59] basal[42] = new SectionRef()
dendrite[60] basal[43] = new SectionRef()
dendrite[61] basal[44] = new SectionRef()
dendrite[62] basal[45] = new SectionRef()
dendrite[63] basal[46] = new SectionRef()
dendrite[64] basal[47] = new SectionRef()
dendrite[65] basal[48] = new SectionRef()
dendrite[66] basal[49] = new SectionRef()
dendrite[67] basal[50] = new SectionRef()
dendrite[68] basal[51] = new SectionRef()
dendrite[69] basal[52] = new SectionRef()
dendrite[70] basal[53] = new SectionRef()
dendrite[71] basal[54] = new SectionRef()
dendrite[72] basal[55] = new SectionRef()
dendrite[73] basal[56] = new SectionRef()
dendrite[74] oad[11] = new SectionRef()
dendrite[75] mad[5] = new SectionRef()
dendrite[76] oad[12] = new SectionRef()
dendrite[77] mad[6] = new SectionRef()
dendrite[78] oad[13] = new SectionRef()
dendrite[79] oad[14] = new SectionRef()
dendrite[80] oad[15] = new SectionRef()
dendrite[81] mad[7] = new SectionRef()
dendrite[82] oad[16] = new SectionRef()
dendrite[83] oad[17] = new SectionRef()
dendrite[84] oad[18] = new SectionRef()
dendrite[85] mad[8] = new SectionRef()
dendrite[86] oad[19] = new SectionRef()
dendrite[87] mad[9] = new SectionRef()
dendrite[88] oad[20] = new SectionRef()
dendrite[89] oad[21] = new SectionRef()
dendrite[90] oad[22] = new SectionRef()
dendrite[91] mad[10] = new SectionRef()
dendrite[92] oad[23] = new SectionRef()
dendrite[93] oad[24] = new SectionRef()
dendrite[94] oad[25] = new SectionRef()
dendrite[95] mad[11] = new SectionRef()
dendrite[96] oad[26] = new SectionRef()
dendrite[97] oad[27] = new SectionRef()
dendrite[98] oad[28] = new SectionRef()
dendrite[99] mad[12] = new SectionRef()
dendrite[100] oad[29] = new SectionRef()
dendrite[101] mad[13] = new SectionRef()
dendrite[102] mad[14] = new SectionRef()
dendrite[103] mad[15] = new SectionRef()
dendrite[104] oad[30] = new SectionRef()
dendrite[105] mad[16] = new SectionRef()
dendrite[106] oad[31] = new SectionRef()
dendrite[107] oad[32] = new SectionRef()
dendrite[108] oad[33] = new SectionRef()
dendrite[109] mad[17] = new SectionRef()
dendrite[110] oad[34] = new SectionRef()
dendrite[111] oad[35] = new SectionRef()
dendrite[112] oad[36] = new SectionRef()
dendrite[113] mad[18] = new SectionRef()
dendrite[114] tuft[0] = new SectionRef()
dendrite[115] tuft[1] = new SectionRef()
dendrite[116] oad[37] = new SectionRef()
dendrite[117] mad[19] = new SectionRef()
dendrite[118] tuft[2] = new SectionRef()
dendrite[119] tuft[3] = new SectionRef()
dendrite[120] tuft[4] = new SectionRef()
dendrite[121] tuft[5] = new SectionRef()
dendrite[122] oad[38] = new SectionRef()
dendrite[123] oad[39] = new SectionRef()
dendrite[124] oad[40] = new SectionRef()
dendrite[125] mad[20] = new SectionRef()
dendrite[126] tuft[6] = new SectionRef()
dendrite[127] tuft[7] = new SectionRef()
dendrite[128] tuft[8] = new SectionRef()
dendrite[129] mad[21] = new SectionRef()
dendrite[130] tuft[9] = new SectionRef()
dendrite[131] tuft[10] = new SectionRef()
dendrite[132] tuft[11] = new SectionRef()
dendrite[133] tuft[12] = new SectionRef()
dendrite[134] oad[41] = new SectionRef()
dendrite[135] mad[22] = new SectionRef()
dendrite[136] tuft[13] = new SectionRef()
dendrite[137] tuft[14] = new SectionRef()
dendrite[138] oad[42] = new SectionRef()
dendrite[139] mad[23] = new SectionRef()
dendrite[140] tuft[15] = new SectionRef()
dendrite[141] tuft[16] = new SectionRef()
dendrite[142] tuft[17] = new SectionRef()
dendrite[143] tuft[18] = new SectionRef()
dendrite[144] tuft[19] = new SectionRef()
dendrite[145] tuft[20] = new SectionRef()
dendrite[146] tuft[21] = new SectionRef()
dendrite[147] tuft[22] = new SectionRef()
dendrite[148] tuft[23] = new SectionRef()
dendrite[149] tuft[24] = new SectionRef()
dendrite[150] tuft[25] = new SectionRef()
dendrite[151] tuft[26] = new SectionRef()
dendrite[152] tuft[27] = new SectionRef()
dendrite[153] tuft[28] = new SectionRef()
dendrite[154] tuft[29] = new SectionRef()
dendrite[155] tuft[30] = new SectionRef()
dendrite[156] tuft[31] = new SectionRef()
dendrite[157] tuft[32] = new SectionRef()
}
objref all, all_dendrites, apical_dendrites, basal_dendrites
proc subsets() { local i
  all = new SectionList()
    soma all.append()
    for i=0, 157 dendrite[i] all.append()

  all_dendrites = new SectionList()
    for i=0, 157 dendrite[i] all_dendrites.append()

  apical_dendrites = new SectionList()
    dendrite apical_dendrites.append()
    for i=4, 5 dendrite[i] apical_dendrites.append()
    for i=12, 15 dendrite[i] apical_dendrites.append()
    for i=28, 33 dendrite[i] apical_dendrites.append()
    for i=52, 55 dendrite[i] apical_dendrites.append()
    for i=74, 157 dendrite[i] apical_dendrites.append()

  basal_dendrites = new SectionList()
    for i=1, 3 dendrite[i] basal_dendrites.append()
    for i=6, 11 dendrite[i] basal_dendrites.append()
    for i=16, 27 dendrite[i] basal_dendrites.append()
    for i=34, 51 dendrite[i] basal_dendrites.append()
    for i=56, 73 dendrite[i] basal_dendrites.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    insert K_A_prox
      gmax_K_A_prox = 0.009
    insert K_C_1D
      gmax_K_C_1D = 0.001
    insert CaL
      gmax_CaL = 0.00021
    insert CaN
      gmax_CaN = 0.002
    insert H_CA1pyr_prox
      gmax_H_CA1pyr_prox = 3.5e-05
    insert Leak_pyr
      gmax_Leak_pyr = 5e-05
      e_Leak_pyr = -65
    Ra = 100
    cm = 1
    insert cacum
      depth_cacum = 0.0825
      tau_cacum = 1.33
      cai0_cacum = 5e-05
  }
  forsec all_dendrites {
    insert Na_dend13
      gmax_Na_dend13 = 0.01
    insert K_DRS4
      gmax_K_DRS4 = 0.004
    insert K_A_dist
      gmax_K_A_dist = 0.009
    insert H_CA1pyr_dist
      gmax_H_CA1pyr_dist = 0.000456
  }
  forsec apical_dendrites {
    insert K_M2
      gmax_K_M2 = 0.00
    insert CaT
      gmax_CaT = 0.00148
    insert CaR
      gmax_CaR = 0.02
  }
  soma {
    insert Na_soma13
      gmax_Na_soma13 = 0.2
    insert K_DRS4
      gmax_K_DRS4 = 0.1
    insert K_AHP3
      gmax_K_AHP3 = 0.005
    insert K_M2
      gmax_K_M2 = 0.001
  }
}



objref all_x, all_dendrites_x, apical_dendrites_x
proc biophys_inhomo() {
  // Path Length from root translated so most proximal end at 0
  //   and no normalization ranges from 0 to 743.939
  all_x = new SubsetDomainIterator(all, 0, 1, 0)
  gmax_K_A_prox_all_x()
//  gmax_K_C_1D_all_x()
  gmax_CaL_all_x()
  gmax_H_CA1pyr_prox_all_x()
  // Path Length from root with no translation
  //   and no normalization ranges from 20 to 743.939
  all_dendrites_x = new SubsetDomainIterator(all_dendrites, 0, 0, 0)
  gmax_K_A_dist_all_dendrites_x()
  gmax_H_CA1pyr_dist_all_dendrites_x()
  // Path Length from root with no translation
  //   and no normalization ranges from 20 to 743.939
  apical_dendrites_x = new SubsetDomainIterator(apical_dendrites, 0, 0, 0)
  gmax_CaT_apical_dendrites_x()
  //gmax_CaR_apical_dendrites_x()
}
proc gmax_K_A_prox_all_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.0035
  m = 5.5e-05
  tp = 0
  td = 100
  pp = 0.0035
  pd = 0
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_K_A_prox(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_K_C_1D_all_x() {local x, p, p0, p1, b, m, t
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.004
  m = -2.6666e-05
  t = 150
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_K_C_1D(x) = (b+m*p)*(p<t)+(b+m*t)*(p>=t)
  }
}
proc gmax_CaL_all_x() {local x, p, p0, p1, b, m, t
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.002
  m = -1.3333e-05
  t = 150
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_CaL(x) = (b+m*p)*(p<t)+(b+m*t)*(p>=t)
  }
}
proc gmax_H_CA1pyr_prox_all_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.00002
  m = 4e-07
  tp = 0
  td = 100
  pp = 0.00002
  pd = 0
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_H_CA1pyr_prox(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_K_A_dist_all_dendrites_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_dendrites_x.update()
  p0 = all_dendrites_x.p0  p1 = all_dendrites_x.p1
  b = 0.0035
  m = 5.5e-05
  tp = 100
  td = 400
  pp = 0
  pd = 0.0255
  for all_dendrites_x.loop() {
    x = all_dendrites_x.x  p = all_dendrites_x.p
    gmax_K_A_dist(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_H_CA1pyr_dist_all_dendrites_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_dendrites_x.update()
  p0 = all_dendrites_x.p0  p1 = all_dendrites_x.p1
  b = 0.00002
  m = 4e-07
  tp = 100
  td = 400
  pp = 0
  pd = 0.00018
  for all_dendrites_x.loop() {
    x = all_dendrites_x.x  p = all_dendrites_x.p
    gmax_H_CA1pyr_dist(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_CaT_apical_dendrites_x() {local x, p, p0, p1, b, m, t
  apical_dendrites_x.update()
  p0 = apical_dendrites_x.p0  p1 = apical_dendrites_x.p1
  b = 0.0005
  m = 5e-06
  t = 400
  for apical_dendrites_x.loop() {
    x = apical_dendrites_x.x  p = apical_dendrites_x.p
    gmax_CaT(x) = (b+m*p)*(p<t)+(b+m*t)*(p>=t)
  }
}
proc gmax_CaR_apical_dendrites_x() {local x, p, p0, p1, A0, A, k, d
  apical_dendrites_x.update()
  p0 = apical_dendrites_x.p0  p1 = apical_dendrites_x.p1
  A0 = 0
  A = 0.05
  k = 0.1
  d = 250
  for apical_dendrites_x.loop() {
    x = apical_dendrites_x.x  p = apical_dendrites_x.p
    gmax_CaR(x) = A0 + A/(1 + exp(k*(d - p)))
  }
}



access soma

celldef()


//proc run() {
//	config()
//	stdinit()
//	continuerun(tstop)
//}


forall{insert vmax}

/*//A-típusú K-csatorna sűrűségének megváltoztatása

objref num
num = new Vector(11)                          // akkora a size, ahány seg van
num.x[0]=0

for i=1,num.size()-1{                       // vektor feltöltése 
	num.x[i]=num.x[i-1]+(1/(num.size()-1))	
	if (num.x[i]>1){                        // előfordulhat, hogy az utolsó kicsit nagyobb lesz mint 1, mert a következő ciklusban nem tetszik neki 
		num.x[i]=1
		}
	}

print "dist"
for i=0,num.size()-1{
	dendrite[144].gmax_K_A_dist(num.x[i])=dendrite[144].gmax_K_A_dist(num.x[i])-(dendrite[144].gmax_K_A_dist(num.x[i])*0.9)
	print dendrite[34].gmax_K_A_dist(num.x[i])
	}
//dendrite[80].gmax_K_A_dist(1)=dendrite[80].gmax_K_A_dist(1)-(dendrite[80].gmax_K_A_dist(1)*0.5)
	//print dendrite[80].gmax_K_A_dist(1)

print "prox"
for i=0,num.size()-1{
	dendrite[144].gmax_K_A_prox(num.x[i])=dendrite[144].gmax_K_A_prox(num.x[i])-(dendrite[144].gmax_K_A_prox(num.x[i])*0.9)
	print dendrite[34].gmax_K_A_prox(num.x[i])
	}

*/




//A-típusú K-csatorna sűrűségének megváltoztatása  PROC-cal, a % paraméterként adható meg, meghívni dendrite[80] A_type_K(90) ha 90%-kal akarjuk csökkenteni

objref num
//strdef section   // így kell string-et definiálni
//dendrite section

proc which_dendrite(){               //itt valasztjuk ki, hogy melyik dendriten csokkentsuk az A-tipusu K csatornak suruseget
l=$1
j=l
print "you chose dendrite[",j,"]"

}

proc A_type_K() {	//adott %-al csokkentjuk az A_tipusu K csatornak suruseget
	
	//section=dendrite[80]
	
	percentage=$1			// azt jelenti, hogy a percentage-t adom meg elso parameterkent mikor meghivom a procedurat
	//section=$s2			// $s2 - mert string
	//j=80
	nseg=dendrite[j].nseg
	
	num = new Vector(nseg)                          
	num.x[0]=0									

	for i=1,num.size()-1{                       
		num.x[i]=num.x[i-1]+(1/(num.size()-1))	 
		if (num.x[i]>1){                        
			num.x[i]=1
			}
		}

	for i=0,num.size()-1{        
		dendrite[j].gmax_K_A_dist(num.x[i])=dendrite[j].gmax_K_A_dist(num.x[i])-(dendrite[j].gmax_K_A_dist(num.x[i])*(percentage/100))
		print dendrite[j].gmax_K_A_dist(num.x[i])
		}
		
	for i=0,num.size()-1{
	dendrite[j].gmax_K_A_prox(num.x[i])=dendrite[j].gmax_K_A_prox(num.x[i])-(dendrite[j].gmax_K_A_prox(num.x[i])*(percentage/100))
	print dendrite[j].gmax_K_A_prox(num.x[i])
	}
	
	print "The density of A-type K channels (on dendrite[",j,"]) is REDUCED by ", percentage, "percentage."
}


objref num2

proc A_type_K_original_value() {  // visszaallitja az eredeti erteket adott %-al valo csokkentes utan

	percentage2=$1
	//j=80
	nseg=dendrite[j].nseg

	num2 = new Vector(nseg)                          
	num2.x[0]=0		


	for i=1,num2.size()-1{                       
		num2.x[i]=num2.x[i-1]+(1/(num2.size()-1))	 
		if (num2.x[i]>1){                        
			num2.x[i]=1
			}
		}

	for i=0,num2.size()-1{        
		dendrite[j].gmax_K_A_dist(num2.x[i])=dendrite[j].gmax_K_A_dist(num2.x[i])/(1-(percentage2/100))
		dendrite[j].gmax_K_A_dist(num2.x[i])
		print dendrite[j].gmax_K_A_dist(num2.x[i])
		}
		
	for i=0,num2.size()-1{        
		dendrite[j].gmax_K_A_prox(num2.x[i])=dendrite[j].gmax_K_A_prox(num2.x[i])/(1-(percentage2/100))
		dendrite[j].gmax_K_A_prox(num2.x[i])
		print dendrite[j].gmax_K_A_prox(num2.x[i])
		}
		
	print "The density of A-type K channels (on dendrite[",j,"]) is RESTORED from ", percentage2, "percent reduction."
} 

proc global_A_type_K() {   // globálisan csökkentjük a csatornák sűrűségét adott %-al

	for k=0, 157 {
		percentage3=$1			// azt jelenti, hogy a percentage-t adom meg elso parameterkent mikor meghivom a procedurat
		//section=$s2			// $s2 - mert string
		//j=80
		nseg=dendrite[k].nseg
		
		num = new Vector(nseg)                          
		num.x[0]=0									

		for i=1,num.size()-1{                       
			num.x[i]=num.x[i-1]+(1/(num.size()-1))	 
			if (num.x[i]>1){                        
				num.x[i]=1
				}
			}

		for i=0,num.size()-1{        
			dendrite[k].gmax_K_A_dist(num.x[i])=dendrite[k].gmax_K_A_dist(num.x[i])-(dendrite[k].gmax_K_A_dist(num.x[i])*(percentage3/100))
			//print dendrite[k].gmax_K_A_dist(num.x[i])
			}
			
		for i=0,num.size()-1{
		dendrite[k].gmax_K_A_prox(num.x[i])=dendrite[k].gmax_K_A_prox(num.x[i])-(dendrite[k].gmax_K_A_prox(num.x[i])*(percentage3/100))
		//print dendrite[k].gmax_K_A_prox(num.x[i])
		}
	}
		soma.gmax_K_A_prox=soma.gmax_K_A_prox-(soma.gmax_K_A_prox*(percentage3/100))
		//soma.gmax_K_A_dist(0.5)=soma.gmax_K_A_dist(0.5)-(soma.gmax_K_A_dist(0.5)*(percentage3/100))
		
		print "The density of A-type K channels is GLOBALLY REDUCED by ", percentage3, "percentage."
	
}

proc global_A_type_K_original_value() {   // globálisan csökkentjük a csatornák sűrűségét adott %-al

	for m=0, 157 {
		percentage4=$1			// azt jelenti, hogy a percentage-t adom meg elso parameterkent mikor meghivom a procedurat
		//section=$s2			// $s2 - mert string
		//j=80
		nseg=dendrite[m].nseg
		
		num2 = new Vector(nseg)                          
		num2.x[0]=0									

		for i=1,num2.size()-1{                       
			num2.x[i]=num2.x[i-1]+(1/(num2.size()-1))	 
			if (num2.x[i]>1){                        
				num2.x[i]=1
				}
			}

		for i=0,num2.size()-1{        
			dendrite[m].gmax_K_A_dist(num2.x[i])=dendrite[m].gmax_K_A_dist(num2.x[i])/(1-(percentage4/100))
			dendrite[m].gmax_K_A_dist(num2.x[i])
			//print dendrite[m].gmax_K_A_dist(num2.x[i])
			}
			
		for i=0,num2.size()-1{        
			dendrite[m].gmax_K_A_prox(num2.x[i])=dendrite[m].gmax_K_A_prox(num2.x[i])/(1-(percentage4/100))
			dendrite[m].gmax_K_A_prox(num2.x[i])
			//print dendrite[m].gmax_K_A_prox(num2.x[i])
			}
	}
	
		soma.gmax_K_A_prox=soma.gmax_K_A_prox/(1-(percentage4/100))
		//soma.gmax_K_A_dist(0.5)=soma.gmax_K_A_dist(0.5)/(1-(percentage4/100))
		
	print "The density of A-type K channels is GLOBALLY RESTORED from ", percentage4, "percent reduction."
	
}


xpanel("Reduce A-type K channel density")
xvalue("dendrite[j], j= ","l", 1,"which_dendrite(l)", 0, 0 )
xvalue("Percentage                                         ","percentage", 1,"A_type_K(percentage)", 0, 0 ) // amikor leenterezem a beírt értéket, lefut a proc    xvalue("Percentage" - EZT ÍRJA KI A PANELBAN,"percentage" - EZ A VÁLTOZÓ NEVE, 1,"A_type_K(percentage)" - EZ HÍVJA MEG A PROC-T, BENNE A PARAMÉTEREKKEL, 0, 0 )  a számok nem tudom micsodák
xpanel(500,200)

xpanel("Reset A-type K channel density")
xvalue("dendrite[j], j= ","l", 1,"which_dendrite(l)", 0, 0 )
xvalue("By what percentage was it reduced?","percentage2", 1,"A_type_K_original_value(percentage2)", 0, 0 ) // amikor leenterezem a beírt értéket, lefut a proc    xvalue("Percentage" - EZT ÍRJA KI A PANELBAN,"percentage" - EZ A VÁLTOZÓ NEVE, 1,"A_type_K(percentage)" - EZ HÍVJA MEG A PROC-T, BENNE A PARAMÉTEREKKEL, 0, 0 )  a számok nem tudom micsodák
xpanel(500,325)

xpanel("Globally reduce A-type K channel density")
xvalue("Percentage                                  ","percentage3", 1,"global_A_type_K(percentage3)", 0, 0 ) 
xpanel(1000,200)

xpanel("Globally reset A-type K channel density")
xvalue("By what percentage was it reduced?","percentage4", 1,"global_A_type_K_original_value(percentage4)", 0, 0 ) // amikor leenterezem a beírt értéket, lefut a proc    xvalue("Percentage" - EZT ÍRJA KI A PANELBAN,"percentage" - EZ A VÁLTOZÓ NEVE, 1,"A_type_K(percentage)" - EZ HÍVJA MEG A PROC-T, BENNE A PARAMÉTEREKKEL, 0, 0 )  a számok nem tudom micsodák
xpanel(1000,325)

/// szinapszis:

/*
objref ampasyn, ns, nc 
strdef dend				//string valtoza


dendrite[129] ampasyn = new Exp2Syn(0.5)
ampasyn.tau1 = 0.5
ampasyn.tau2 = 1

ns = new NetStim(0.5)
ns.start = 100
ns.interval = 1000

nc = new NetCon(ns, ampasyn)
nc.weight = 0.0005
nc.delay = 0.0
*/

objref ns, nc, ampasyn
/*
proc ampa(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)
		
        $o1= new Exp2Syn($2)
        $o1.tau1 = $3
        $o1.tau2 = $4
    
        ns = new NetStim($2)
		ns.start = $5
        ns.interval = $6
		ns.number=$7
        
        nc = new NetCon(ns,ampasyn)
        nc.weight = $8
}
*/

proc ampa(){								// meghivni: dendrite[129] ampa(0.5,0.1,2,50,0.1,1,0.001)
		
        ampasyn= new Exp2Syn($1)
        ampasyn.tau1 = $2
        ampasyn.tau2 = $3
    
        ns = new NetStim($1)
		ns.start = $4
        ns.interval = $5
		ns.number=$6
        
        nc = new NetCon(ns,ampasyn)
        nc.weight = $7
}

objref ampasyn2, ampasyn3, ampasyn4, ampasyn5, ampasyn6, ampasyn7, ns2, ns3, ns4, ns5, ns6, ns7, nc1_1, nc1_2, nc2_1, nc2_2, nc3_1, nc3_2, nc4_1, nc4_2
objref nc5_1, nc5_2, nc6_1, nc6_2, nc7_1, nc7_2, nmdar, nmdar2, nmdar3, nmdar4, nmdar5, nmdar6, nmdar7, ns2, ns3, ns4, ns5, ns6, ns7 

//****************************************************

// 1-ről 8-ra növekvő számú szinkron bemenet szimuláció:

proc ampa_nmda(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn= new Exp2Syn($1)
        ampasyn.tau1 = $2
        ampasyn.tau2 = $3
		
		ns = new NetStim($1)
		ns.start = $4
        ns.interval = $5
		ns.number=$6
    
        nc1_1 = new NetCon(ns,ampasyn)
        nc1_1.weight = $7
		
        nmdar = new NMDA_JS($1)                 //NMDA_dsyn -  NMDA csatorna Behabadi et al. 2012 modellből
												//NMDA - NMDA csatorna a Gomez Gonzálesz modellből 
        nc1_2 = new NetCon(ns,nmdar)
        nc1_2.weight = $8  //($7*0.396)
		
}



proc ampa_nmda2(){								// ha ugyanazt rakom rá, felül írja, akkoris ha máshova rakom

        ampasyn2= new Exp2Syn($1)
        ampasyn2.tau1 = $2
        ampasyn2.tau2 = $3
		
		ns2 = new NetStim($1)
		ns2.start = $4
        ns2.interval = $5
		ns2.number=$6
    
        nc2_1 = new NetCon(ns2,ampasyn2)
        nc2_1.weight = $7
		
        nmdar2 = new NMDA_JS($1)					//NMDA - NMDA csatorna a Gomez Gonzálesz modellbő
    
        nc2_2 = new NetCon(ns2,nmdar2)
        nc2_2.weight = $8
}

proc ampa_nmda3(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn3= new Exp2Syn($1)
        ampasyn3.tau1 = $2
        ampasyn3.tau2 = $3
		
		ns3 = new NetStim($1)
		ns3.start = $4
        ns3.interval = $5
		ns3.number=$6
    
        nc3_1 = new NetCon(ns3,ampasyn3)
        nc3_1.weight = $7
		
        nmdar3 = new NMDA_JS($1)
    
        nc3_2 = new NetCon(ns3,nmdar3)
        nc3_2.weight = $8
}

proc ampa_nmda4(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn4= new Exp2Syn($1)
        ampasyn4.tau1 = $2
        ampasyn4.tau2 = $3
		
		ns4 = new NetStim($1)
		ns4.start = $4
        ns4.interval = $5
		ns4.number=$6
    
        nc4_1 = new NetCon(ns4,ampasyn4)
        nc4_1.weight = $7
		
        nmdar4 = new NMDA_JS($1)
    
        nc4_2 = new NetCon(ns4,nmdar4)
        nc4_2.weight = $8
}

proc ampa_nmda5(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn5= new Exp2Syn($1)
        ampasyn5.tau1 = $2
        ampasyn5.tau2 = $3
		
		ns5 = new NetStim($1)
		ns5.start = $4
        ns5.interval = $5
		ns5.number=$6
    
        nc5_1 = new NetCon(ns5,ampasyn5)
        nc5_1.weight = $7
		
        nmdar5 = new NMDA_JS($1)
    
        nc5_2 = new NetCon(ns5,nmdar5)
        nc5_2.weight = $8
}

proc ampa_nmda6(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn6= new Exp2Syn($1)
        ampasyn6.tau1 = $2
        ampasyn6.tau2 = $3
		
		ns6 = new NetStim($1)
		ns6.start = $4
        ns6.interval = $5
		ns6.number=$6
    
        nc6_1 = new NetCon(ns6,ampasyn6)
        nc6_1.weight = $7
		
        nmdar6 = new NMDA_JS($1)
    
        nc6_2 = new NetCon(ns6,nmdar6)
        nc6_2.weight = $8
}

proc ampa_nmda7(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn7= new Exp2Syn($1)
        ampasyn7.tau1 = $2
        ampasyn7.tau2 = $3
		
		ns7 = new NetStim($1)
		ns7.start = $4
        ns7.interval = $5
		ns7.number=$6
    
        nc7_1 = new NetCon(ns7,ampasyn7)
        nc7_1.weight = $7
		
        nmdar7 = new NMDA_JS($1)
    
        nc7_2 = new NetCon(ns7,nmdar7)
        nc7_2.weight = $8
}
// MAIN CONTROL WINDOW:
	objref contrl
	contrl = new VBox()
	contrl.intercept(1)
	nrncontrolmenu()
	contrl.intercept(0)
	contrl.map("Control",1,500,-1,-1)


		tstop=300
		
		objref g
		g = new Graph()
		g.size(0,tstop,-75,50)
		g.addvar("soma.v(0.5)",1,0)
		g.exec_menu("Keep Lines")
		graphList[0].append(g)		//ez kell ahhoz h tényleg rajzoljon rajta
		//g.addvar("dendrite[dend].v(dendrite_location)",2,0)
		
		proc add_to_graph(){
		
		g.addvar("dendrite[dend_4].v(dendrite_location_4)",2,0)			//jó helyre rakja, csak így írja ki, ahogy itt van, nem számokkal
																	// FONTOS lenne, hogy számmal írja ki!!!!!!!!
		}
		
		objref soma_rect, soma_recv, dend_rect, dend_recv
		soma_rect = new Vector()
		soma_recv = new Vector()
		objref soma_matrix
		soma_matrix = new Matrix()
		dend_rect = new Vector()
		dend_recv = new Vector()
		objref dend_matrix
		dend_matrix = new Matrix()
		//soma_matrix.resize(12001,9)
		
	proc synapse(){
	//max_num_syn  //kap értéket a proc gensyn() - ben

/*	
			objref num
			num = new Vector(9) 
			
num.x[0]=0
num.x[1]=7
num.x[2]=14
num.x[3]=21
num.x[4]=28
num.x[5]=35
num.x[6]=42
num.x[7]=49
num.x[8]=56

/*
num.x[0]=0
num.x[1]=28
num.x[2]=47
num.x[3]=66
num.x[4]=85
num.x[5]=104
num.x[6]=122
num.x[7]=140
*/		
	for i=0,8{   //MEDDIG MENJEN A CIKLUS, vektor méretezésénél is átírni
		
		number=1 
		//num.x[i]   
		
		//interval=1
		/*
		if (i>0){
		interval= 100/num.x[i]
		}
		*/
		
		if (i==0){
			dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number*0,AMPA_weight,NMDA_weight)
		}
		
		if (i==1){
			
			dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
			
		}
		if (i==2){
			dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
			dendrite[dend_1]  ampa_nmda2(dendrite_location_1,AMPA_tau1,AMPA_tau2,start+delay,interval,number,AMPA_weight,NMDA_weight)
			
		}
		if (i==3){
			
		dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_1]  ampa_nmda2(dendrite_location_1,AMPA_tau1,AMPA_tau2,start+delay,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_2]  ampa_nmda3(dendrite_location_2,AMPA_tau1,AMPA_tau2,start+delay*2,interval,number,AMPA_weight,NMDA_weight)
			
		}
		if (i==4){
		dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_1]  ampa_nmda2(dendrite_location_1,AMPA_tau1,AMPA_tau2,start+delay,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_2]  ampa_nmda3(dendrite_location_2,AMPA_tau1,AMPA_tau2,start+delay*2,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_3]  ampa_nmda4(dendrite_location_3,AMPA_tau1,AMPA_tau2,start+delay*3,interval,number,AMPA_weight,NMDA_weight)
		}
		if (i==5){
		dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_1]  ampa_nmda2(dendrite_location_1,AMPA_tau1,AMPA_tau2,start+delay,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_2]  ampa_nmda3(dendrite_location_2,AMPA_tau1,AMPA_tau2,start+delay*2,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_3]  ampa_nmda4(dendrite_location_3,AMPA_tau1,AMPA_tau2,start+delay*3,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_4]  ampa_nmda5(dendrite_location_4,AMPA_tau1,AMPA_tau2,start+delay*4,interval,number,AMPA_weight,NMDA_weight)
			
		}
		if (i==6){
		dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_1]  ampa_nmda2(dendrite_location_1,AMPA_tau1,AMPA_tau2,start+delay,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_2]  ampa_nmda3(dendrite_location_2,AMPA_tau1,AMPA_tau2,start+delay*2,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_3]  ampa_nmda4(dendrite_location_3,AMPA_tau1,AMPA_tau2,start+delay*3,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_4]  ampa_nmda5(dendrite_location_4,AMPA_tau1,AMPA_tau2,start+delay*4,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_5]  ampa_nmda6(dendrite_location_5,AMPA_tau1,AMPA_tau2,start+delay*5,interval,number,AMPA_weight,NMDA_weight)
			
		}
		if (i==7){
		
		dendrite[dend]  ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_1]  ampa_nmda2(dendrite_location_1,AMPA_tau1,AMPA_tau2,start+delay,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_2]  ampa_nmda3(dendrite_location_2,AMPA_tau1,AMPA_tau2,start+delay*2,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_3]  ampa_nmda4(dendrite_location_3,AMPA_tau1,AMPA_tau2,start+delay*3,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_4]  ampa_nmda5(dendrite_location_4,AMPA_tau1,AMPA_tau2,start+delay*4,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_5]  ampa_nmda6(dendrite_location_5,AMPA_tau1,AMPA_tau2,start+delay*5,interval,number,AMPA_weight,NMDA_weight)
		dendrite[dend_6]  ampa_nmda7(dendrite_location_6,AMPA_tau1,AMPA_tau2,start+delay*6,interval,number,AMPA_weight,NMDA_weight)  // általában ugyanannak a dendritnek akarom másik helyére rakni, így a dendrite_location-ből is több kell
		}
		
		
		soma_recv.record(&soma.v(0.5))
		dend_recv.record(&dendrite[dend_4] .v(dendrite_location_4))  // csak a dendrite[dend]- en mér
		run()
		//soma_recv.printf()
		soma_rect.record(&t)
		dend_rect.record(&t)
		
			if	(i==0){
				soma_matrix.resize(soma_recv.size(),8+2)
				dend_matrix.resize(dend_recv.size(),8+2)
			}
		soma_matrix.setcol(0, soma_rect)
		soma_matrix.setcol(i+1, soma_recv)
		dend_matrix.setcol(0, dend_rect)
		dend_matrix.setcol(i+1, dend_recv)	
		run()

		}
	}
		
	objref savdata, savdata2
	savdata = new File()	
	savdata2 = new File()	
	
	proc save_to_file(){			// 1. oszlop az idő, 2.: nincs bemenet, 3.: 1 bemenet, 4.: 2 bemenet....
	
	savdata.wopen("Voltage_soma.dat")
	soma_matrix.fprint(savdata, " %g\t")		
	savdata.close()
	
	savdata2.wopen("Voltage_dendrite.dat")
	dend_matrix.fprint(savdata2, " %g\t")
	savdata2.close()
	}	
	
	//strdef file_name
	
proc gensyn(){
		
	delay=0.1
		
	dend = 80
	dend_1 = 80
	dend_2 = 80
	dend_3 = 80
	dend_4 = 80
	dend_5 = 80
	dend_6 = 80
	dendrite_location=0.1
	dendrite_location_1=0.6
	dendrite_location_2=0.2
	dendrite_location_3=0.8
	dendrite_location_4=0.4
	dendrite_location_5=0.9
	dendrite_location_6=0.5
	//max_num_syn=8
	AMPA_tau1=0.1
	AMPA_tau2=2
	start=150
	interval=0
	AMPA_weight=0.0004
	NMDA_weight=0.002
	
	xpanel("Synapse") 
	 
			xvalue("Which dendrite","dend",1)
			xvalue("Which dendrite","dend_1",1)
			xvalue("Which dendrite","dend_2",1)
			xvalue("Which dendrite","dend_3",1)
			xvalue("Which dendrite,this one is plotted and saved","dend_4",1)
			xvalue("Which dendrite","dend_5",1)
			xvalue("Which dendrite","dend_6",1)
			xvalue("Location on dendrite","dendrite_location",1)
			xvalue("Location on dendrite","dendrite_location_1",1)
			xvalue("Location on dendrite","dendrite_location_2",1)
			xvalue("Location on dendrite","dendrite_location_3",1)
			xvalue("Location on dendrite,this one is plotted and saved","dendrite_location_4",1)
			xvalue("Location on dendrite","dendrite_location_5",1)
			xvalue("Location on dendrite","dendrite_location_6",1)
			xvalue("Start","start",1)
			xvalue("Delay","delay",1)
			//xvalue("Time interval between the inputs","interval",1)
			//xvalue("Maximum number of synapses","max_num_syn",1)
			xlabel("Graph")
			xbutton("Add new dendrite to graph","add_to_graph()")
			xlabel("AMPA component")                        
			xvalue("AMPA tau1","AMPA_tau1",1)
			xvalue("AMPA tau2","AMPA_tau2",1)
			xvalue("Weight of AMPA","AMPA_weight",1)
			xlabel("NMDA component") 
			xvalue("Weight of NMDA","NMDA_weight",1)  
			xlabel("") 			
			xbutton("Generate synapse and run simulation","synapse()")
			xlabel("Save vectors to files")
			xbutton("Save","save_to_file()")
			xlabel("Stop simulation") 
			xbutton("Stop", "timer.end()")
			
			doEvents()
	xpanel(0,0)
}

gensyn()
//*******************************************************************************************************

proc syn(){

	dend = 80
	dendrite_location=0.1
	AMPA_tau1=0.1
	AMPA_tau2=2
	start=150
	interval=0
	number=1
	AMPA_weight=0.0004
	NMDA_weight=0.002
	
	xpanel("Simple Synapse") 
	 
			xvalue("Which dendrite","dend",1)
			xvalue("Location on dendrite","dendrite_location",1)
			xvalue("Start","start",1)
			xvalue("Time interval between the inputs","interval",1)
			xvalue("Number of synapses", "number",1)                 
			xvalue("AMPA tau1","AMPA_tau1",1)
			xvalue("AMPA tau2","AMPA_tau2",1)
			xvalue("Weight of AMPA","AMPA_weight",1)
			xvalue("Weight of NMDA","NMDA_weight",1) 
			xbutton("generate synapse", "dendrite[dend] ampa_nmda(dendrite_location,AMPA_tau1,AMPA_tau2,start,interval,number,AMPA_weight,NMDA_weight)")
			doEvents()
	xpanel(0,0)
}

syn()



/*
proc ampa_nmda2(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn2= new Exp2Syn($1)
        ampasyn2.tau1 = $2
        ampasyn2.tau2 = $3
		
		ns2 = new NetStim($1)
		ns2.start = $4
        ns2.interval = $5
		ns2.number=$6
    
        nc2_1 = new NetCon(ns2,ampasyn2)
        nc2_1.weight = $7
		
        nmdar2 = new NMDA($1)					//NMDA - NMDA csatorna a Gomez Gonzálesz modellbő
    
        nc2_2 = new NetCon(ns2,nmdar2)
        nc2_2.weight = $8
}

proc ampa_nmda3(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn3= new Exp2Syn($1)
        ampasyn3.tau1 = $2
        ampasyn3.tau2 = $3
		
		ns3 = new NetStim($1)
		ns3.start = $4
        ns3.interval = $5
		ns3.number=$6
    
        nc3_1 = new NetCon(ns3,ampasyn3)
        nc3_1.weight = $7
		
        nmdar3 = new NMDA($1)
    
        nc3_2 = new NetCon(ns3,nmdar3)
        nc3_2.weight = $7/2
}

proc ampa_nmda4(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn4= new Exp2Syn($1)
        ampasyn4.tau1 = $2
        ampasyn4.tau2 = $3
		
		ns4 = new NetStim($1)
		ns4.start = $4
        ns4.interval = $5
		ns4.number=$6
    
        nc4_1 = new NetCon(ns4,ampasyn4)
        nc4_1.weight = $7
		
        nmdar4 = new NMDA($1)
    
        nc4_2 = new NetCon(ns4,nmdar4)
        nc4_2.weight = $7/2
}

proc ampa_nmda5(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn5= new Exp2Syn($1)
        ampasyn5.tau1 = $2
        ampasyn5.tau2 = $3
		
		ns5 = new NetStim($1)
		ns5.start = $4
        ns5.interval = $5
		ns5.number=$6
    
        nc5_1 = new NetCon(ns5,ampasyn5)
        nc5_1.weight = $7
		
        nmdar5 = new NMDA($1)
    
        nc5_2 = new NetCon(ns5,nmdar5)
        nc5_2.weight = $7/2
}

proc ampa_nmda6(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn6= new Exp2Syn($1)
        ampasyn6.tau1 = $2
        ampasyn6.tau2 = $3
		
		ns6 = new NetStim($1)
		ns6.start = $4
        ns6.interval = $5
		ns6.number=$6
    
        nc6_1 = new NetCon(ns6,ampasyn6)
        nc6_1.weight = $7
		
        nmdar6 = new NMDA($1)
    
        nc6_2 = new NetCon(ns6,nmdar6)
        nc6_2.weight = $7/2
}

proc ampa_nmda7(){								// meghivni: dendrite[129] ampa(ampasyn,0.5,1,0.1,1000,100)

        ampasyn7= new Exp2Syn($1)
        ampasyn7.tau1 = $2
        ampasyn7.tau2 = $3
		
		ns7 = new NetStim($1)
		ns7.start = $4
        ns7.interval = $5
		ns7.number=$6
    
        nc7_1 = new NetCon(ns7,ampasyn7)
        nc7_1.weight = $7
		
        nmdar7 = new NMDA($1)
    
        nc7_2 = new NetCon(ns7,nmdar7)
        nc7_2.weight = $7/2
}

*/



