load_file("subiter.hoc")

proc celldef() {
  topol()
  secrefs()
  subsets()
  geom()
  biophys()
  geom_nseg()
  biophys_inhomo()
  gensyn()
}

create soma, dendrite[158]

proc topol() { local i
  connect dendrite[0](0), soma(1)
  for i = 1, 3 connect dendrite[i](0), soma(0)
  for i = 4, 5 connect dendrite[i](0), dendrite(1)
  for i = 6, 7 connect dendrite[i](0), dendrite[1](1)
  for i = 8, 9 connect dendrite[i](0), dendrite[2](1)
  for i = 10, 11 connect dendrite[i](0), dendrite[3](1)
  for i = 12, 13 connect dendrite[i](0), dendrite[4](1)
  for i = 14, 15 connect dendrite[i](0), dendrite[5](1)
  for i = 16, 17 connect dendrite[i](0), dendrite[6](1)
  for i = 18, 19 connect dendrite[i](0), dendrite[7](1)
  for i = 20, 21 connect dendrite[i](0), dendrite[8](1)
  for i = 22, 23 connect dendrite[i](0), dendrite[9](1)
  for i = 24, 25 connect dendrite[i](0), dendrite[10](1)
  for i = 26, 27 connect dendrite[i](0), dendrite[11](1)
  for i = 28, 29 connect dendrite[i](0), dendrite[12](1)
  for i = 30, 31 connect dendrite[i](0), dendrite[13](1)
  for i = 32, 33 connect dendrite[i](0), dendrite[14](1)
  for i = 34, 35 connect dendrite[i](0), dendrite[16](1)
  for i = 36, 37 connect dendrite[i](0), dendrite[17](1)
  for i = 38, 39 connect dendrite[i](0), dendrite[18](1)
  for i = 40, 41 connect dendrite[i](0), dendrite[19](1)
  for i = 42, 43 connect dendrite[i](0), dendrite[22](1)
  for i = 44, 45 connect dendrite[i](0), dendrite[23](1)
  for i = 46, 47 connect dendrite[i](0), dendrite[25](1)
  for i = 48, 49 connect dendrite[i](0), dendrite[26](1)
  for i = 50, 51 connect dendrite[i](0), dendrite[27](1)
  for i = 52, 53 connect dendrite[i](0), dendrite[30](1)
  for i = 54, 55 connect dendrite[i](0), dendrite[31](1)
  for i = 56, 57 connect dendrite[i](0), dendrite[34](1)
  for i = 58, 59 connect dendrite[i](0), dendrite[35](1)
  for i = 60, 61 connect dendrite[i](0), dendrite[36](1)
  for i = 62, 63 connect dendrite[i](0), dendrite[37](1)
  for i = 64, 65 connect dendrite[i](0), dendrite[38](1)
  for i = 66, 67 connect dendrite[i](0), dendrite[39](1)
  for i = 68, 69 connect dendrite[i](0), dendrite[46](1)
  for i = 70, 71 connect dendrite[i](0), dendrite[50](1)
  for i = 72, 73 connect dendrite[i](0), dendrite[51](1)
  for i = 74, 75 connect dendrite[i](0), dendrite[55](1)
  for i = 76, 77 connect dendrite[i](0), dendrite[75](1)
  for i = 78, 79 connect dendrite[i](0), dendrite[76](1)
  for i = 80, 81 connect dendrite[i](0), dendrite[77](1)
  for i = 82, 83 connect dendrite[i](0), dendrite[78](1)
  for i = 84, 85 connect dendrite[i](0), dendrite[81](1)
  for i = 86, 87 connect dendrite[i](0), dendrite[85](1)
  for i = 88, 89 connect dendrite[i](0), dendrite[86](1)
  for i = 90, 91 connect dendrite[i](0), dendrite[87](1)
  for i = 92, 93 connect dendrite[i](0), dendrite[88](1)
  for i = 94, 95 connect dendrite[i](0), dendrite[91](1)
  for i = 96, 97 connect dendrite[i](0), dendrite[94](1)
  for i = 98, 99 connect dendrite[i](0), dendrite[95](1)
  for i = 100, 101 connect dendrite[i](0), dendrite[99](1)
  for i = 102, 103 connect dendrite[i](0), dendrite[101](1)
  for i = 104, 105 connect dendrite[i](0), dendrite[102](1)
  for i = 106, 107 connect dendrite[i](0), dendrite[104](1)
  for i = 108, 109 connect dendrite[i](0), dendrite[105](1)
  for i = 110, 111 connect dendrite[i](0), dendrite[108](1)
  for i = 112, 113 connect dendrite[i](0), dendrite[109](1)
  for i = 114, 115 connect dendrite[i](0), dendrite[111](1)
  for i = 116, 117 connect dendrite[i](0), dendrite[113](1)
  for i = 118, 119 connect dendrite[i](0), dendrite[114](1)
  for i = 120, 121 connect dendrite[i](0), dendrite[115](1)
  for i = 122, 123 connect dendrite[i](0), dendrite[116](1)
  for i = 124, 125 connect dendrite[i](0), dendrite[117](1)
  for i = 126, 127 connect dendrite[i](0), dendrite[119](1)
  for i = 128, 129 connect dendrite[i](0), dendrite[125](1)
  for i = 130, 131 connect dendrite[i](0), dendrite[126](1)
  for i = 132, 133 connect dendrite[i](0), dendrite[127](1)
  for i = 134, 135 connect dendrite[i](0), dendrite[129](1)
  for i = 136, 137 connect dendrite[i](0), dendrite[133](1)
  for i = 138, 139 connect dendrite[i](0), dendrite[135](1)
  for i = 140, 141 connect dendrite[i](0), dendrite[136](1)
  for i = 142, 143 connect dendrite[i](0), dendrite[139](1)
  for i = 144, 145 connect dendrite[i](0), dendrite[143](1)
  for i = 146, 147 connect dendrite[i](0), dendrite[145](1)
  for i = 148, 149 connect dendrite[i](0), dendrite[147](1)
  for i = 150, 151 connect dendrite[i](0), dendrite[148](1)
  for i = 152, 153 connect dendrite[i](0), dendrite[149](1)
  for i = 154, 155 connect dendrite[i](0), dendrite[151](1)
  for i = 156, 157 connect dendrite[i](0), dendrite[153](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, 0, 0, 20)
	pt3dadd(20, 0, 0, 20)
  }
  dendrite {pt3dclear()
	pt3dadd(20, 0, 0, 20)
	pt3dadd(20.8, 0.3, -0.5, 2.1)
	pt3dadd(21.5, 0.5, -1, 2.1)
	pt3dadd(22.4, 0.4, -1.6, 2.1)
	pt3dadd(23.8, 0.5, -2.5, 2.1)
	pt3dadd(24.6, 0.5, -3, 2.1)
	pt3dadd(26.1, 0.6, -4, 2.1)
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  }
}
proc shape3d_2() {
  dendrite[9] {	pt3dadd(-45.9, -6.3, -17.4, 0.3)
	pt3dadd(-46.7, -6.3, -17.1, 0.3)
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  }
}
proc shape3d_3() {
  dendrite[19] {	pt3dadd(-25.8, -20.7, -2.1, 0.7)
	pt3dadd(-26.5, -20.7, -1.5, 0.7)
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  }
}
proc shape3d_4() {
  dendrite[21] {	pt3dadd(-140.9, 4.9, 33.4, 0.2)
	pt3dadd(-141.4, 5.5, 33.8, 0.2)
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  }
}
proc shape3d_5() {
  dendrite[26] {	pt3dadd(-39.1, 24.2, -5.2, 0.7)
	pt3dadd(-39.6, 24.6, -5.1, 0.7)
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  }
}
proc shape3d_6() {
  dendrite[32] {	pt3dadd(64.5, 18.7, -73.4, 0.5)
	pt3dadd(65.4, 18, -76.3, 0.5)
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  }
}
proc shape3d_7() {
  dendrite[37] {	pt3dadd(-95.9, -61.3, 6.6, 0.3)
	pt3dadd(-95.9, -62.1, 6.5, 0.3)
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  }
}
proc shape3d_8() {
  dendrite[41] {	pt3dadd(-69.5, -19.7, -22.2, 0.3)
	pt3dadd(-70.5, -19.4, -23.2, 0.3)
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  }
}
proc shape3d_9() {
  dendrite[44] {	pt3dadd(-73, -3.9, -4.5, 0.3)
	pt3dadd(-73.9, -3.6, -4.1, 0.3)
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  }
}
proc shape3d_10() {
  dendrite[47] {	pt3dadd(-131.1, 7.9, -84.6, 0.3)
	pt3dadd(-131.8, 8.1, -85.5, 0.3)
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  }
}
proc shape3d_11() {
  dendrite[49] {	pt3dadd(-109.4, 68.6, -6.7, 0.3)
	pt3dadd(-109.8, 69.2, -6.8, 0.3)
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  }
}
proc shape3d_12() {
  dendrite[52] {	pt3dadd(119.6, -52.6, 51.5, 0.5)
	pt3dadd(120.6, -53.1, 51.5, 0.5)
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  }
}
proc shape3d_13() {
  dendrite[54] {	pt3dadd(84.7, -49.4, 36.8, 0.5)
	pt3dadd(86.4, -50.7, 42.4, 0.5)
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  }
}
proc shape3d_14() {
  dendrite[59] {	pt3dadd(-71.8, -158.2, -80.7, 0.3)
	pt3dadd(-73.2, -159.1, -81.2, 0.3)
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  }
}
proc shape3d_15() {
  dendrite[62] {	pt3dadd(-116.6, -88.7, 10.7, 0.3)
	pt3dadd(-117.2, -89.1, 11, 0.3)
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  }
}
proc shape3d_16() {
  dendrite[65] {	pt3dadd(-32.7, -52.9, 0.4, 0.3)
	pt3dadd(-33.1, -53.6, 0.5, 0.3)
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  }
}
proc shape3d_17() {
  dendrite[66] {	pt3dadd(-70.7, -90.5, -33.1, 0.3)
	pt3dadd(-70.7, -91.3, -33.4, 0.3)
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  }
}
proc shape3d_18() {
  dendrite[69] {	pt3dadd(-112.3, 4.9, 7.6, 0.3)
	pt3dadd(-113.1, 5.5, 8.6, 0.3)
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  }
}
proc shape3d_19() {
  dendrite[71] {	pt3dadd(-129.4, 64.7, 57.8, 0.3)
	pt3dadd(-130.4, 65.7, 59.2, 0.3)
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  }
}
proc shape3d_20() {
  dendrite[74] {	pt3dadd(105.7, -29.8, -23.9, 0.5)
	pt3dadd(106.8, -30.3, -25.3, 0.5)
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  }
}
proc shape3d_21() {
  dendrite[80] {	pt3dadd(122.5, -15.9, 6.3, 0.5)
	pt3dadd(122.4, -16.6, 6.4, 0.5)
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  }
}
proc shape3d_22() {
  dendrite[82] {	pt3dadd(67.1, -115.6, -14.4, 0.5)
	pt3dadd(65.3, -117.8, -15, 0.5)
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  }
}
proc shape3d_23() {
  dendrite[84] {	pt3dadd(264.7, 2.5, -56.2, 0.5)
	pt3dadd(266, 2.9, -57.5, 0.5)
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  }
}
proc shape3d_24() {
  dendrite[90] {	pt3dadd(159.5, 73.5, -88.2, 0.5)
	pt3dadd(159.3, 74.3, -88.8, 0.5)
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  }
}
proc shape3d_25() {
  dendrite[96] {	pt3dadd(225.6, -7.7, -13.1, 0.5)
	pt3dadd(226.5, -7.6, -14, 0.5)
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  }
}
proc shape3d_26() {
  dendrite[100] {	pt3dadd(239.6, -23.8, -1.4, 0.5)
	pt3dadd(240.4, -24.5, -2, 0.5)
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  }
}
proc shape3d_27() {
  dendrite[107] {	pt3dadd(234.3, 24.9, 105, 0.5)
	pt3dadd(234.9, 24.9, 105.7, 0.5)
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  }
}
proc shape3d_28() {
  dendrite[111] {	pt3dadd(308.5, -60.2, 57.7, 0.5)
	pt3dadd(309.6, -60.8, 57.8, 0.5)
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  }
}
proc shape3d_29() {
  dendrite[117] {	pt3dadd(264, -21.5, 58.3, 1.2)
	pt3dadd(266.4, -20.8, 58.6, 1.2)
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  }
}
proc shape3d_30() {
  dendrite[122] {	pt3dadd(324.5, 4, 95.5, 0.5)
	pt3dadd(325.7, 4.8, 97.1, 0.5)
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  }
}
proc shape3d_31() {
  dendrite[128] {	pt3dadd(301.6, -21.5, 84.4, 0.2)
	pt3dadd(303.6, -22, 90, 0.2)
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  }
}
proc shape3d_32() {
  dendrite[133] {	pt3dadd(385.2, -75.2, 178.5, 0.6)
	pt3dadd(387.7, -73.4, 182.8, 0.6)
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  }
}
proc shape3d_33() {
  dendrite[140] {	pt3dadd(439.4, -56.7, 117.3, 0.2)
	pt3dadd(439.3, -57.6, 116.2, 0.2)
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  }
}
proc shape3d_34() {
  dendrite[144] {	pt3dadd(369, -19.8, 52.5, 1.1)
	pt3dadd(369.4, -19.2, 52.3, 1.1)
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  }
}
proc shape3d_35() {
  dendrite[146] {	pt3dadd(378.7, 31.1, 126.8, 1.1)
	pt3dadd(378.8, 32.1, 127.4, 1.1)
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  }
}
proc shape3d_36() {
  dendrite[150] {	pt3dadd(433.6, -115.7, 126.1, 0.2)
	pt3dadd(433.8, -116.7, 123.7, 0.2)
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  }
}
proc shape3d_37() {
  dendrite[155] {	pt3dadd(404.3, 46.4, 42.2, 0.6)
	pt3dadd(404.6, 47.7, 42.1, 0.6)
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  }
}
proc shape3d_38() {
  dendrite[157] {	pt3dadd(438.5, -45.2, 106.4, 0.2)
	pt3dadd(439.7, -45.6, 108, 0.2)
  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
}

objref oad[43],mad[24],tuft[33]
// objref lamd[3],mamd[9],uamd[5]
objref basal[57],mysoma

// This part categorizes the cell-sections into main apical dendrite (mad),
// oblique apical dendrite (oad), basal dendrite, soma, and
// tuft.  This is needed since synaptic densities vary by cell-region.

proc secrefs() {
soma mysoma = new SectionRef()
dendrite mad[0] = new SectionRef()
dendrite[1] basal[0] = new SectionRef()
dendrite[2] basal[1] = new SectionRef()
dendrite[3] basal[2] = new SectionRef()
dendrite[4] mad[1] = new SectionRef()
dendrite[5] oad[0] = new SectionRef()
dendrite[6] basal[3] = new SectionRef()
dendrite[7] basal[4] = new SectionRef()
dendrite[8] basal[5] = new SectionRef()
dendrite[9] basal[6] = new SectionRef()
dendrite[10] basal[7] = new SectionRef()
dendrite[11] basal[8] = new SectionRef()
dendrite[12] oad[1] = new SectionRef()
dendrite[13] mad[2] = new SectionRef()
dendrite[14] oad[2] = new SectionRef()
dendrite[15] oad[3] = new SectionRef()
dendrite[16] basal[9] = new SectionRef()
dendrite[17] basal[10] = new SectionRef()
dendrite[18] basal[11] = new SectionRef()
dendrite[19] basal[12] = new SectionRef()
dendrite[20] basal[13] = new SectionRef()
dendrite[21] basal[14] = new SectionRef()
dendrite[22] basal[15] = new SectionRef()
dendrite[23] basal[16] = new SectionRef()
dendrite[24] basal[17] = new SectionRef()
dendrite[25] basal[18] = new SectionRef()
dendrite[26] basal[19] = new SectionRef()
dendrite[27] basal[20] = new SectionRef()
dendrite[28] oad[4] = new SectionRef()
dendrite[29] oad[5] = new SectionRef()
dendrite[30] oad[6] = new SectionRef()
dendrite[31] mad[3] = new SectionRef()
dendrite[32] oad[7] = new SectionRef()
dendrite[33] oad[8] = new SectionRef()
dendrite[34] basal[21] = new SectionRef()
dendrite[35] basal[22] = new SectionRef()
dendrite[36] basal[23] = new SectionRef()
dendrite[37] basal[24] = new SectionRef()
dendrite[38] basal[25] = new SectionRef()
dendrite[39] basal[26] = new SectionRef()
dendrite[40] basal[27] = new SectionRef()
dendrite[41] basal[28] = new SectionRef()
dendrite[42] basal[29] = new SectionRef()
dendrite[43] basal[30] = new SectionRef()
dendrite[44] basal[31] = new SectionRef()
dendrite[45] basal[32] = new SectionRef()
dendrite[46] basal[33] = new SectionRef()
dendrite[47] basal[34] = new SectionRef()
dendrite[48] basal[35] = new SectionRef()
dendrite[49] basal[36] = new SectionRef()
dendrite[50] basal[37] = new SectionRef()
dendrite[51] basal[38] = new SectionRef()
dendrite[52] oad[9] = new SectionRef()
dendrite[53] oad[10] = new SectionRef()
dendrite[54] oad[11] = new SectionRef()
dendrite[55] mad[4] = new SectionRef()
dendrite[56] basal[39] = new SectionRef()
dendrite[57] basal[40] = new SectionRef()
dendrite[58] basal[41] = new SectionRef()
dendrite[59] basal[42] = new SectionRef()
dendrite[60] basal[43] = new SectionRef()
dendrite[61] basal[44] = new SectionRef()
dendrite[62] basal[45] = new SectionRef()
dendrite[63] basal[46] = new SectionRef()
dendrite[64] basal[47] = new SectionRef()
dendrite[65] basal[48] = new SectionRef()
dendrite[66] basal[49] = new SectionRef()
dendrite[67] basal[50] = new SectionRef()
dendrite[68] basal[51] = new SectionRef()
dendrite[69] basal[52] = new SectionRef()
dendrite[70] basal[53] = new SectionRef()
dendrite[71] basal[54] = new SectionRef()
dendrite[72] basal[55] = new SectionRef()
dendrite[73] basal[56] = new SectionRef()
dendrite[74] oad[11] = new SectionRef()
dendrite[75] mad[5] = new SectionRef()
dendrite[76] oad[12] = new SectionRef()
dendrite[77] mad[6] = new SectionRef()
dendrite[78] oad[13] = new SectionRef()
dendrite[79] oad[14] = new SectionRef()
dendrite[80] oad[15] = new SectionRef()
dendrite[81] mad[7] = new SectionRef()
dendrite[82] oad[16] = new SectionRef()
dendrite[83] oad[17] = new SectionRef()
dendrite[84] oad[18] = new SectionRef()
dendrite[85] mad[8] = new SectionRef()
dendrite[86] oad[19] = new SectionRef()
dendrite[87] mad[9] = new SectionRef()
dendrite[88] oad[20] = new SectionRef()
dendrite[89] oad[21] = new SectionRef()
dendrite[90] oad[22] = new SectionRef()
dendrite[91] mad[10] = new SectionRef()
dendrite[92] oad[23] = new SectionRef()
dendrite[93] oad[24] = new SectionRef()
dendrite[94] oad[25] = new SectionRef()
dendrite[95] mad[11] = new SectionRef()
dendrite[96] oad[26] = new SectionRef()
dendrite[97] oad[27] = new SectionRef()
dendrite[98] oad[28] = new SectionRef()
dendrite[99] mad[12] = new SectionRef()
dendrite[100] oad[29] = new SectionRef()
dendrite[101] mad[13] = new SectionRef()
dendrite[102] mad[14] = new SectionRef()
dendrite[103] mad[15] = new SectionRef()
dendrite[104] oad[30] = new SectionRef()
dendrite[105] mad[16] = new SectionRef()
dendrite[106] oad[31] = new SectionRef()
dendrite[107] oad[32] = new SectionRef()
dendrite[108] oad[33] = new SectionRef()
dendrite[109] mad[17] = new SectionRef()
dendrite[110] oad[34] = new SectionRef()
dendrite[111] oad[35] = new SectionRef()
dendrite[112] oad[36] = new SectionRef()
dendrite[113] mad[18] = new SectionRef()
dendrite[114] tuft[0] = new SectionRef()
dendrite[115] tuft[1] = new SectionRef()
dendrite[116] oad[37] = new SectionRef()
dendrite[117] mad[19] = new SectionRef()
dendrite[118] tuft[2] = new SectionRef()
dendrite[119] tuft[3] = new SectionRef()
dendrite[120] tuft[4] = new SectionRef()
dendrite[121] tuft[5] = new SectionRef()
dendrite[122] oad[38] = new SectionRef()
dendrite[123] oad[39] = new SectionRef()
dendrite[124] oad[40] = new SectionRef()
dendrite[125] mad[20] = new SectionRef()
dendrite[126] tuft[6] = new SectionRef()
dendrite[127] tuft[7] = new SectionRef()
dendrite[128] tuft[8] = new SectionRef()
dendrite[129] mad[21] = new SectionRef()
dendrite[130] tuft[9] = new SectionRef()
dendrite[131] tuft[10] = new SectionRef()
dendrite[132] tuft[11] = new SectionRef()
dendrite[133] tuft[12] = new SectionRef()
dendrite[134] oad[41] = new SectionRef()
dendrite[135] mad[22] = new SectionRef()
dendrite[136] tuft[13] = new SectionRef()
dendrite[137] tuft[14] = new SectionRef()
dendrite[138] oad[42] = new SectionRef()
dendrite[139] mad[23] = new SectionRef()
dendrite[140] tuft[15] = new SectionRef()
dendrite[141] tuft[16] = new SectionRef()
dendrite[142] tuft[17] = new SectionRef()
dendrite[143] tuft[18] = new SectionRef()
dendrite[144] tuft[19] = new SectionRef()
dendrite[145] tuft[20] = new SectionRef()
dendrite[146] tuft[21] = new SectionRef()
dendrite[147] tuft[22] = new SectionRef()
dendrite[148] tuft[23] = new SectionRef()
dendrite[149] tuft[24] = new SectionRef()
dendrite[150] tuft[25] = new SectionRef()
dendrite[151] tuft[26] = new SectionRef()
dendrite[152] tuft[27] = new SectionRef()
dendrite[153] tuft[28] = new SectionRef()
dendrite[154] tuft[29] = new SectionRef()
dendrite[155] tuft[30] = new SectionRef()
dendrite[156] tuft[31] = new SectionRef()
dendrite[157] tuft[32] = new SectionRef()
}
objref all, all_dendrites, apical_dendrites, basal_dendrites
proc subsets() { local i
  all = new SectionList()
    soma all.append()
    for i=0, 157 dendrite[i] all.append()

  all_dendrites = new SectionList()
    for i=0, 157 dendrite[i] all_dendrites.append()

  apical_dendrites = new SectionList()
    dendrite apical_dendrites.append()
    for i=4, 5 dendrite[i] apical_dendrites.append()
    for i=12, 15 dendrite[i] apical_dendrites.append()
    for i=28, 33 dendrite[i] apical_dendrites.append()
    for i=52, 55 dendrite[i] apical_dendrites.append()
    for i=74, 157 dendrite[i] apical_dendrites.append()

  basal_dendrites = new SectionList()
    for i=1, 3 dendrite[i] basal_dendrites.append()
    for i=6, 11 dendrite[i] basal_dendrites.append()
    for i=16, 27 dendrite[i] basal_dendrites.append()
    for i=34, 51 dendrite[i] basal_dendrites.append()
    for i=56, 73 dendrite[i] basal_dendrites.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    insert K_A_prox
      gmax_K_A_prox = 0.009
    insert K_C_1D
      gmax_K_C_1D = 0.001
    insert CaL
      gmax_CaL = 0.00021
    insert CaN
      gmax_CaN = 0.002
    insert H_CA1pyr_prox
      gmax_H_CA1pyr_prox = 3.5e-05
    insert Leak_pyr
      gmax_Leak_pyr = 5e-05
      e_Leak_pyr = -65
    Ra = 100
    cm = 1
    insert cacum
      depth_cacum = 0.0825
      tau_cacum = 1.33
      cai0_cacum = 5e-05
  }
  forsec all_dendrites {
    insert Na_dend13
      gmax_Na_dend13 = 0.01
    insert K_DRS4
      gmax_K_DRS4 = 0.004
    insert K_A_dist
      gmax_K_A_dist = 0.009
    insert H_CA1pyr_dist
      gmax_H_CA1pyr_dist = 0.000456
  }
  forsec apical_dendrites {
    insert K_M2
      gmax_K_M2 = 0.00
    insert CaT
      gmax_CaT = 0.00148
    insert CaR
      gmax_CaR = 0.02
  }
  soma {
    insert Na_soma13
      gmax_Na_soma13 = 0.2
    insert K_DRS4
      gmax_K_DRS4 = 0.1
    insert K_AHP3
      gmax_K_AHP3 = 0.005
    insert K_M2
      gmax_K_M2 = 0.001
  }
}
objref all_x, all_dendrites_x, apical_dendrites_x
proc biophys_inhomo() {
  // Path Length from root translated so most proximal end at 0
  //   and no normalization ranges from 0 to 743.939
  all_x = new SubsetDomainIterator(all, 0, 1, 0)
  gmax_K_A_prox_all_x()
//  gmax_K_C_1D_all_x()
  gmax_CaL_all_x()
  gmax_H_CA1pyr_prox_all_x()
  // Path Length from root with no translation
  //   and no normalization ranges from 20 to 743.939
  all_dendrites_x = new SubsetDomainIterator(all_dendrites, 0, 0, 0)
  gmax_K_A_dist_all_dendrites_x()
  gmax_H_CA1pyr_dist_all_dendrites_x()
  // Path Length from root with no translation
  //   and no normalization ranges from 20 to 743.939
  apical_dendrites_x = new SubsetDomainIterator(apical_dendrites, 0, 0, 0)
  gmax_CaT_apical_dendrites_x()
  gmax_CaR_apical_dendrites_x()
}
proc gmax_K_A_prox_all_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.0035
  m = 5.5e-05
  tp = 0
  td = 100
  pp = 0.0035
  pd = 0
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_K_A_prox(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_K_C_1D_all_x() {local x, p, p0, p1, b, m, t
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.004
  m = -2.6666e-05
  t = 150
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_K_C_1D(x) = (b+m*p)*(p<t)+(b+m*t)*(p>=t)
  }
}
proc gmax_CaL_all_x() {local x, p, p0, p1, b, m, t
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.002
  m = -1.3333e-05
  t = 150
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_CaL(x) = (b+m*p)*(p<t)+(b+m*t)*(p>=t)
  }
}
proc gmax_H_CA1pyr_prox_all_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_x.update()
  p0 = all_x.p0  p1 = all_x.p1
  b = 0.00002
  m = 4e-07
  tp = 0
  td = 100
  pp = 0.00002
  pd = 0
  for all_x.loop() {
    x = all_x.x  p = all_x.p
    gmax_H_CA1pyr_prox(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_K_A_dist_all_dendrites_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_dendrites_x.update()
  p0 = all_dendrites_x.p0  p1 = all_dendrites_x.p1
  b = 0.0035
  m = 5.5e-05
  tp = 100
  td = 400
  pp = 0
  pd = 0.0255
  for all_dendrites_x.loop() {
    x = all_dendrites_x.x  p = all_dendrites_x.p
    gmax_K_A_dist(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_H_CA1pyr_dist_all_dendrites_x() {local x, p, p0, p1, b, m, tp, td, pp, pd
  all_dendrites_x.update()
  p0 = all_dendrites_x.p0  p1 = all_dendrites_x.p1
  b = 0.00002
  m = 4e-07
  tp = 100
  td = 400
  pp = 0
  pd = 0.00018
  for all_dendrites_x.loop() {
    x = all_dendrites_x.x  p = all_dendrites_x.p
    gmax_H_CA1pyr_dist(x) = (b+m*p)*(p>tp)*(p<=td)+pp*(p<=tp)+pd*(p>td)
  }
}
proc gmax_CaT_apical_dendrites_x() {local x, p, p0, p1, b, m, t
  apical_dendrites_x.update()
  p0 = apical_dendrites_x.p0  p1 = apical_dendrites_x.p1
  b = 0.0005
  m = 5e-06
  t = 400
  for apical_dendrites_x.loop() {
    x = apical_dendrites_x.x  p = apical_dendrites_x.p
    gmax_CaT(x) = (b+m*p)*(p<t)+(b+m*t)*(p>=t)
  }
}
proc gmax_CaR_apical_dendrites_x() {local x, p, p0, p1, A0, A, k, d
  apical_dendrites_x.update()
  p0 = apical_dendrites_x.p0  p1 = apical_dendrites_x.p1
  A0 = 0
  A = 0.05
  k = 0.1
  d = 250
  for apical_dendrites_x.loop() {
    x = apical_dendrites_x.x  p = apical_dendrites_x.p
    gmax_CaR(x) = A0 + A/(1 + exp(k*(d - p)))
  }
}

proc setstim(){
        secnum=$1
        secnum2=secnum
        }

objref percent,reg,tot,pscint,pscnum,pscstoch
objref pscstart,randdist

// This procedure initializes the ampa synapses
proc ampa(){
        $o1 = new Exp2Syn($4)
        $o1.tau1 = 0.2
        $o1.tau2 = 2.0
        $o1.e = 0.0
        $o2 = new NetStim($4)
        $o2.interval = pscint.x[$5]
        $o2.number = pscnum.x[$5]
        $o2.start = pscstart.x[$5]
        $o2.noise = pscstoch.x[$5]
        $o3 = new NetCon($o2,$o1)
        $o3.weight = 0.00018
        //s.point_mark($o1,2)
}

// This procedure initializes the gaba synapses
proc gaba(){
        $o1 = new Exp2Syn($4)
        $o1.tau1 = 1.0
        $o1.tau2 = 18.0
        $o1.e = -75.0
        $o2 = new NetStim($4)
        $o2.interval = pscint.x[$5]
        $o2.number = pscnum.x[$5]
        $o2.start = pscstart.x[$5]
        $o2.noise = pscstoch.x[$5]
        $o3 = new NetCon($o2,$o1)
        $o3.weight = 0.00054
}

objref ampasyn[30000],ampapre[30000],ampacon[30000]
objref gabasyn[30000],gabapre[30000],gabacon[30000]

// This procedure generates synapses by cell-region by randomly choosing a spatial location and inserting a synapse.
proc generatesynapses() {
randdist = new Random(seed1)
        {access $o1.sec}
        N=int($2*$o1.sec.L)
        for i=1,N{
                num=randdist.uniform(0,100)
                if(num < $4){
                        ampa(ampasyn[amp_stim],ampapre[amp_stim],ampacon[amp_stim],i/N,$6)
                        amp_stim=amp_stim+1
                }
        }
        M=int($3*$o1.sec.L)
        for i=1,M{
                num=randdist.uniform(0,100)
                if(num < $5){
                        gaba(gabasyn[gab_stim],gabapre[gab_stim],gabacon[gab_stim],i/M,$8+5)
                        gab_stim=gab_stim+1
                }
        }
}

proc gensyn() {
// lmadens = 0.03     // the density of ampa synapses in the lower, main apical dend.
// mmadens = 2.37      // densities are given in # synapses/micron
// umadens = 6.98
madens = 2.37       // should be recalculated!
oadens = 3.52
tuftdens = 0.96
basaldens = 1.86
somadens = 0.0
// gabalmadens = 1.69 // the density of gaba synapses
// gabammadens = 0.54
// gabaumadens = 0.15
gabamadens = 0.54       // should be recalculated!
gabaoadens = 0.11
gabatuftdens = 0.17
gababasaldens = 0.36
gabasomadens = 1.69
seed1=1

amp_stim = 0          // these are counters; in the end amp_stim will be the total # of ampa synapses activated by the
gab_stim = 0          // stimulus

percent = new Vector(10,0)
reg = new Vector(10)
tot = new Vector(10)
pscint = new Vector(10,0)
pscnum = new Vector(10,0)
pscstoch = new Vector(10,0)
pscstart = new Vector(10,0)

secnum=0
xpanel("Stimulus")                            // panel for setting the percentage of synapses
        xlabel("AMPA")                        // which will respond to the controlled stimulus
        xvalue("0:Schaeffer Collateral","percent.x[2]",1,"setstim(2)")
        xvalue("1:Perforant Path","percent.x[3]",1,"setstim(3)")
        xlabel("Stimulus properties")
        xvalue("active section","secnum2",1)
        xvalue("start","pscstart.x[secnum]",1)
        xvalue("mean interval (ms)","pscint.x[secnum]",1)
        xvalue("mean number of EPSP's","pscnum.x[secnum]",1)
        xvalue("degree of stochasticity","pscstoch.x[secnum]",1)
        doEvents()
xpanel(0,0)
}

proc config() {

if(amp_stim > 0){
	for i=0,amp_stim-1{
		ampacon[i].active(0)
	}
}
if(gab_stim > 0){
	for i=0,gab_stim-1{
		gabacon[i].active(0)
	}
}


amp_stim = 0          // these are counters; in the end amp_stim will be the total # of ampa synapses activated by the
gab_stim = 0          // stimulus

// SOMA
generatesynapses(mysoma,somadens,gabasomadens,percent.x[0],percent.x[5],0)
tot.x[0] = amp_stim
reg.x[0] = tot.x[0]
tot.x[5] = gab_stim
reg.x[5] = tot.x[5]
print reg.x[0],reg.x[5]

// MAIN APICAL DENDRITE
for j=0,23{generatesynapses(mad[j],madens,gabamadens,percent.x[1],percent.x[6],1)}
tot.x[1] = amp_stim
reg.x[1] = tot.x[1]-tot.x[0]
tot.x[6] = gab_stim
reg.x[6] = tot.x[6]-tot.x[5]
print reg.x[1],reg.x[6]

// OBLIQUE APICAL DENDRITES
for j=0,42{generatesynapses(oad[j],oadens,gabaoadens,percent.x[2],percent.x[7],2)}
tot.x[2] = amp_stim
reg.x[2] = tot.x[2]-tot.x[1]
tot.x[7] = gab_stim
reg.x[7] = tot.x[7]-tot.x[6]
print reg.x[2],reg.x[7]

// APICAL TUFT
for j=0,32{generatesynapses(tuft[j],tuftdens,gabatuftdens,percent.x[3],percent.x[8],3)}
tot.x[3] = amp_stim
reg.x[3] = tot.x[3]-tot.x[2]
tot.x[8] = gab_stim
reg.x[8] = tot.x[8]-tot.x[7]
print reg.x[3],reg.x[8]

// BASAL DENDRITES
for j=0,56{generatesynapses(basal[j],basaldens,gababasaldens,percent.x[4],percent.x[9],4)}
tot.x[4] = amp_stim
reg.x[4] = tot.x[4]-tot.x[3]
tot.x[9] = gab_stim
reg.x[9] = tot.x[9]-tot.x[8]
print reg.x[4],reg.x[9]
print tot.x[4],tot.x[9]
}

access soma

celldef()

proc run() {
	config()
	stdinit()
	continuerun(tstop)
}
